CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:424
GitHash:
ModuleCount:15
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['Images module is blank in the GUI since we are adding the image path in CLI.']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
    Filter images?:Images only
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
Metadata:[module_num:2|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notes:['Extract well and site metadata to use and assess which images have been flagged']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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Well>[A-Z]-[0-9]{2})_F(?P<FOV>[0-9]{4})_T(?P<Time>[0-9]{4})_Z(?P<Z_slice>[0-9]{4})_C(?P<Channel>[0-9]{2}).tif
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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notes:['This pipeline is meant for correction with 4 channels specifically:', '', 'DAPI', 'GFP', 'RFP', 'CY5', '']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:4
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does Channel "01")
    Name to assign these images:DNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channel "02")
    Name to assign these images:488_1
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channel "03")
    Name to assign these images:488_2
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channel "04")
    Name to assign these images:561
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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notes:['']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
    Do you want to group your images?:Yes
    grouping metadata count:1
    Metadata category:Well

MeasureImageQuality:[module_num:5|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notes:['Only calculate the blur and saturation image quality metrics as we are using these to flag images for poor quality. Blur is set as default.']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
    Calculate metrics for which images?:All loaded images
    Image count:1
    Scale count:1
    Threshold count:1
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    Include the image rescaling value?:Yes
    Calculate blur metrics?:Yes
    Spatial scale for blur measurements:20
    Calculate saturation metrics?:Yes
    Calculate intensity metrics?:No
    Calculate thresholds?:No
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
CorrectIlluminationCalculate:[module_num:6|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notes:['Since for all seeding densities, Schwann cells do not take up a ton of space in the images, we use Background in the IC calculations.', '', 'Block size 50 seems to work best for the DAPI channel (nuclei), as well as using the Fit Polynomial smoothing method as it seemed to not over correct as compared to the other methods.', '', 'We use the each method for calculating IC functions as this seemed to produce the best results over creating one from all images in a channel.']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
    Select the input image:DNA
    Name the output image:IllumDNA
    Select how the illumination function is calculated:Background
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    Block size:30
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Fit Polynomial
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:7|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notes:['Since for all seeding densities, Schwann cells do not take up a ton of space in the images, we use Background in the IC calculations.', '', 'Block size 15 seems to work best for the CY5 channel (mitochondria), as well as using the Fit Polynomial smoothing method as it seemed to not over correct as compared to the other methods.', '', 'We use the each method for calculating IC functions as this seemed to produce the best results over creating one from all images in a channel.']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
    Select the input image:488_1
    Name the output image:Illum488_1
    Select how the illumination function is calculated:Background
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    Block size:15
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Fit Polynomial
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:8|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
    Select the input image:488_2
    Name the output image:Illum488_2
    Select how the illumination function is calculated:Background
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    Block size:15
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Fit Polynomial
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:9|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
    Select the input image:561
    Name the output image:Illum561
    Select how the illumination function is calculated:Background
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    Block size:15
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Fit Polynomial
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:10|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notes:['Apply illumination correction functions to all channels']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
    Select the input image:DNA
    Name the output image:CorrDNA
    Select the illumination function:IllumDNA
    Select how the illumination function is applied:Subtract
    Select the input image:488_1
    Name the output image:Corr488_1
    Select the illumination function:Illum488_1
    Select how the illumination function is applied:Subtract
    Select the input image:488_2
    Name the output image:Corr488_2
    Select the illumination function:Illum488_2
    Select how the illumination function is applied:Subtract
    Select the input image:561
    Name the output image:Corr561
    Select the illumination function:Illum561
    Select how the illumination function is applied:Subtract
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

SaveImages:[module_num:11|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notes:['Save DAPI images as same bit-depth']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
    Select the type of image to save:Image
    Select the image to save:CorrDNA
    Select method for constructing file names:From image filename
    Select image name for file prefix:DNA
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_illumcorrect
    Saved file format:tiff
    Output file location:Default Output Folder|Desktop/GitHub Repos/nf1_cellpainting_data/1.cellprofiler_ic/2000_density_test_IC
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:12|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notes:['Save CY5 images as the same bit-depth']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
    Select the type of image to save:Image
    Select the image to save:Corr488_1
    Select method for constructing file names:From image filename
    Select image name for file prefix:488_1
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_illumcorrect
    Saved file format:tiff
    Output file location:Default Output Folder|Desktop/GitHub Repos/nf1_cellpainting_data/1.cellprofiler_ic/2000_density_test_IC
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:13|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
    Select the type of image to save:Image
    Select the image to save:Corr488_2
    Select method for constructing file names:From image filename
    Select image name for file prefix:488_2
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_illumcorrect
    Saved file format:tiff
    Output file location:Default Output Folder|Desktop/GitHub Repos/nf1_cellpainting_data/1.cellprofiler_ic/2000_density_test_IC
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:14|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
    Select the type of image to save:Image
    Select the image to save:Corr561
    Select method for constructing file names:From image filename
    Select image name for file prefix:561
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_illumcorrect
    Saved file format:tiff
    Output file location:Default Output Folder|Desktop/GitHub Repos/nf1_cellpainting_data/1.cellprofiler_ic/2000_density_test_IC
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ExportToSpreadsheet:[module_num:15|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:IC_QC_Run
    Overwrite existing files without warning?:No
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