CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:426
GitHash:
ModuleCount:19
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['Module notes are provided by Jenna Tomkinson.', '', 'Images module is left blank since we are giving the path to the images in the CLI command.', '', '']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
    Filter images?:Images only
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
Metadata:[module_num:2|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notes:['Metadata is extracted from the file names using regular expressions. Metadata included are well, FOV, time, and z-slice, and channel.']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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Well>[A-Z]-[0-9]{2})_F(?P<FOV>[0-9]{4})_T(?P<Time>[0-9]{4})_Z(?P<Z_slice>[0-9]{4})_C(?P<Channel>[0-9]{2})
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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notes:['This pipeline assigns names to 2 channels specifically:', '', '01 = DNA/Hoechst staining', '05 = AnnexinV staining']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does Channel "01")
    Name to assign these images:DNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channel "05")
    Name to assign these images:AnnexinV
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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notes:['Given this timelapse data, we group by Well and FOV.']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
    Do you want to group your images?:Yes
    grouping metadata count:2
    Metadata category:Well
    Metadata category:FOV

IdentifyPrimaryObjects:[module_num:5|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notes:['Segment nuclei from the DNA channel. These are the same parameters for nuclei segmentation as the 4ch pipeline. ']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
    Select the input image:DNA
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):35,90
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:4.0464
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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    Size of adaptive window:80
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    Thresholding method:Minimum Cross-Entropy

RunCellpose:[module_num:6|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notes:['Use Cellpose to segment the AnnexinV staining and use the DNA image as a base to identify the segmentations. The cyto model is best at identifying the regions of AnnexinV staining around nuclei. I was unable to get the IdentifySecondaryObjects module to work to segment this stain.']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
    Select the input image:AnnexinV
    Run CellPose in docker or local python environment:Python
    Select Cellpose docker image:cellprofiler/runcellpose_with_pretrained:0.1
    Expected object diameter:150
    Detection mode:cyto
    Name the output object:Cells
    Use GPU:Yes
    Use averaging:No
    Supply nuclei image as well?:Yes
    Select the nuclei image:DNA
    Save probability image?:No
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    Location of the pre-trained model file:Elsewhere...|
    Pre-trained model file name:cyto_0
    Flow threshold:0.4
    Cell probability threshold:0.0
    GPU memory share for each worker:0.1
    Stitch Threshold:0.0
    Use 3D:No
    Minimum size:-1
    Use Omnipose for mask reconstruction:No
    Invert images:No
    Remove objects that are touching the edge?:Yes

RelateObjects:[module_num:7|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notes:['Cellpose does not automatically associate objects together. Since we are using both CellProfiler and Cellpose for segmentation, we need to use this module to associate the objects. CellProfiler traditionally relates the parent as the Nuclei assigned to the Cells as the secondary or child object. We will keep this same practice in this module.']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
    Parent objects:Nuclei
    Child objects:Cells
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
IdentifyTertiaryObjects:[module_num:8|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notes:['The parameters are the same as the analysis pipeline for 3 channels.']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
    Select the larger identified objects:Cells
    Select the smaller identified objects:Nuclei
    Name the tertiary objects to be identified:Cytoplasm
    Shrink smaller object prior to subtraction?:Yes

MeasureColocalization:[module_num:9|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notes:['Measure correlation metrics within whole image and within objects.']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
    Select images to measure:AnnexinV, DNA
    Set threshold as percentage of maximum intensity for the images:15.0
    Select where to measure correlation:Both
    Select objects to measure:Cells, Cytoplasm, Nuclei
    Run all metrics?:Yes
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    Method for Costes thresholding:Faster

MeasureGranularity:[module_num:10|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notes:['Measures granularity metrics within images (default) and objects (when parameter is turned on).']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
    Select images to measure:AnnexinV, DNA
    Measure within objects?:Yes
    Select objects to measure:Cells, Cytoplasm, Nuclei
    Subsampling factor for granularity measurements:0.25
    Subsampling factor for background reduction:0.25
    Radius of structuring element:10
    Range of the granular spectrum:16

MeasureObjectIntensity:[module_num:11|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notes:['Measures intensity metrics within objects.']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
    Select images to measure:AnnexinV, DNA
    Select objects to measure:Cells, Cytoplasm, Nuclei

MeasureImageIntensity:[module_num:12|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notes:['Measures whole image intensity not aggregated within objects.']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
    Select images to measure:AnnexinV, DNA
    Measure the intensity only from areas enclosed by objects?:No
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    Calculate custom percentiles:No
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
MeasureObjectNeighbors:[module_num:13|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notes:['Measure nuclei neighbors that are adjacent to each other.']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
    Select objects to measure:Nuclei
    Select neighboring objects to measure:Nuclei
    Method to determine neighbors:Adjacent
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    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:14|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notes:['Measure cell neighbors that are adjacent to each other.']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
    Select objects to measure:Cells
    Select neighboring objects to measure:Cells
    Method to determine neighbors:Adjacent
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    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectIntensityDistribution:[module_num:15|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notes:['Measure object intensity distributions witin objects using center x,y coords for each single object.', '', "We calculate Zernikes for magnitudes and phases as we are interested in seeing phase even if it doesn't help with classifying phenotypes."]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
    Select images to measure:AnnexinV, DNA
    Hidden:3
    Hidden:1
    Hidden:0
    Calculate intensity Zernikes?:Magnitudes and phase
    Maximum zernike moment:9
    Select objects to measure:Nuclei
    Object to use as center?:These objects
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    Select objects to measure:Cytoplasm
    Object to use as center?:These objects
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    Select objects to measure:Cells
    Object to use as center?:These objects
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    Scale the bins?:Yes
    Number of bins:4
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
MeasureObjectSizeShape:[module_num:16|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notes:['Measure object size and shape metrics (not related to any channels).']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
    Select object sets to measure:Cells, Cytoplasm, Nuclei
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

MeasureTexture:[module_num:17|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notes:['Measure texture within objects and the whole images.']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
    Select images to measure:AnnexinV, DNA
    Select objects to measure:Cells, Cytoplasm, Nuclei
    Enter how many gray levels to measure the texture at:256
    Hidden:1
    Measure whole images or objects?:Both
    Texture scale to measure:3

MeasureImageAreaOccupied:[module_num:18|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notes:['Measure the area occupied in each image by each object.']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
    Measure the area occupied by:Objects
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    Select object sets to measure:Cells, Cytoplasm, Nuclei

ExportToDatabase:[module_num:19|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notes:['Output the morphology features into an SQLite database.']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
    Database type:SQLite
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    Add a prefix to table names?:No
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    Output file location:Default Output Folder|NF1_SchwannCell_data/CellProfiler_pipelines/Analysis_Output/Plate2_Output
    Create a CellProfiler Analyst properties file?:No
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    Name the SQLite database file:timelapse_2ch_analysis.sqlite
    Calculate the per-image mean values of object measurements?:No
    Calculate the per-image median values of object measurements?:No
    Calculate the per-image standard deviation values of object measurements?:No
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    Export measurements for all objects to the database?:All
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    Maximum # of characters in a column name:64
    Create one table per object, a single object table or a single object view?:One table per object type
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    Write image thumbnails directly to the database?:No
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    Experiment name:2_channel_time_lapse
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    Export object relationships?:No
    Overwrite without warning?:Never
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    Create a CellProfiler Analyst workspace file?:No
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