CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:426
GitHash:
ModuleCount:10
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['Module notes are provided by Jenna Tomkinson.', '', 'Images module is left blank since we are giving the path to the images in the CLI command']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
    Filter images?:Images only
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
Metadata:[module_num:2|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notes:['Metadata is extracted from the file names using regular expressions. Metadata includes well, FOV, time, z-slice, and channel.']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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Well>[A-Z]-[0-9]{2})_F(?P<FOV>[0-9]{4})_T(?P<Time>[0-9]{4})_Z(?P<Z_slice>[0-9]{4})_C(?P<Channel>[0-9]{2})
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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notes:['This pipeline assigns names to 4 channels specifically:', '', '01 = DNA/Hoechst staining', '02 = 488_1 Chromalive staining', '03 = 488_2 Chromalive staining', '04 = 561 Chromalive staining']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:4
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does Channel "01")
    Name to assign these images:DNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channel "02")
    Name to assign these images:488_1
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channel "03")
    Name to assign these images:488_2
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channel "04")
    Name to assign these images:561
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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notes:['Given we are using timelapse data, we group by Well and FOV.']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
    Do you want to group your images?:Yes
    grouping metadata count:2
    Metadata category:Well
    Metadata category:FOV

RunCellpose:[module_num:5|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notes:['This module runs CellPose to segment the Nuclei by using the DAPI channel. This is a GPU enabled module.']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
    Select the input image:DNA
    Rescale images before running Cellpose:Yes
    Run CellPose in docker or local python environment:Python
    Select Cellpose docker image:cellprofiler/runcellpose_with_pretrained:0.1
    Expected object diameter:30
    Detection mode:nuclei
    Name the output object:Nuclei
    Use GPU:Yes
    Use averaging:Yes
    Supply nuclei image as well?:No
    Select the nuclei image:DNA
    Save probability image?:Yes
    Name the probability image:Probabilities
    Location of the pre-trained model file:Elsewhere...|
    Pre-trained model file name:cyto_0
    Flow threshold:0.4
    Cell probability threshold:0.0
    GPU memory share for each worker:0.1
    Stitch Threshold:0.0
    Use 3D:No
    Minimum size:15
    Use Omnipose for mask reconstruction:Yes
    Invert images:No
    Remove objects that are touching the edge?:Yes

TrackObjects:[module_num:6|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notes:['Track the objects across time using overlap as the method due to high frame rate compared to the motion of the cells.']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
    Choose a tracking method:LAP
    Select the objects to track:Nuclei
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    Select display option:Color and Number
    Save color-coded image?:Yes
    Name the output image:TrackedCells
    Select the movement model:Both
    Number of standard deviations for search radius:3.0
    Search radius limit, in pixel units (Min,Max):2.0,20
    Run the second phase of the LAP algorithm?:Yes
    Gap closing cost:40
    Split alternative cost:40
    Merge alternative cost:40
    Maximum gap displacement, in pixel units:5
    Maximum split score:50
    Maximum merge score:50
    Maximum temporal gap, in frames:5
    Filter objects by lifetime?:Yes
    Filter using a minimum lifetime?:Yes
    Minimum lifetime:1
    Filter using a maximum lifetime?:No
    Maximum lifetime:100
    Mitosis alternative cost:80
    Maximum mitosis distance, in pixel units:40
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
MeasureObjectNeighbors:[module_num:7|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
    Select objects to measure:Nuclei
    Select neighboring objects to measure:Nuclei
    Method to determine neighbors:Adjacent
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    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectIntensity:[module_num:8|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enabled:False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
    Select images to measure:DNA
    Select objects to measure:Nuclei

ExportToDatabase:[module_num:9|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
    Database type:SQLite
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    Add a prefix to table names?:No
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    Output file location:Default Output Folder|
    Create a CellProfiler Analyst properties file?:No
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    Name the SQLite database file:Track_Objects.sqlite
    Calculate the per-image mean values of object measurements?:No
    Calculate the per-image median values of object measurements?:No
    Calculate the per-image standard deviation values of object measurements?:No
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    Export measurements for all objects to the database?:All
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    Maximum # of characters in a column name:64
    Create one table per object, a single object table or a single object view?:One table per object type
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    Write image thumbnails directly to the database?:No
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    Experiment name:Track_Objects
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    Export object relationships?:No
    Overwrite without warning?:Never
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    Create a CellProfiler Analyst workspace file?:No
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
SaveImages:[module_num:10|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:TrackedCells
    Select method for constructing file names:From image filename
    Select image name for file prefix:DNA
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_tracked
    Saved file format:png
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes
