CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:424
GitHash:
ModuleCount:8
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['Images module is left blank since we are giving the path to the images in the CLI command']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
    Filter images?:Images only
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
Metadata:[module_num:2|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notes:['Metadata is extracted from the file and folder names using regular expressions.']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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Well>[A-Z]-[0-9]{2})_F(?P<FOV>[0-9]{4})_T(?P<Time>[0-9]{4})_Z(?P<Z_slice>[0-9]{4})_C(?P<Channel>[0-9]{2})_illumcorrect.tiff
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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notes:['This pipeline assigns names to 4 channels specifically:', '', 'DAPI', 'GFP', 'CY5', 'RFP']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does Channel "01")
    Name to assign these images:DNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channel "05")
    Name to assign these images:AnnexinV
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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notes:['We do not use the Groups module.']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
    Do you want to group your images?:Yes
    grouping metadata count:1
    Metadata category:Well

MeasureImageIntensity:[module_num:5|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notes:['Measures whole image intensity not aggregated within objects']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
    Select images to measure:AnnexinV, DNA
    Measure the intensity only from areas enclosed by objects?:No
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    Calculate custom percentiles:No
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
MeasureImageSkeleton:[module_num:6|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
    Select an image to measure:DNA

MeasureImageSkeleton:[module_num:7|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
    Select an image to measure:AnnexinV

ExportToDatabase:[module_num:8|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notes:['Output the morphology features into an SQLite database.']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
    Database type:SQLite
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    Add a prefix to table names?:No
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    Output file location:Default Output Folder|NF1_SchwannCell_data/CellProfiler_pipelines/Analysis_Output/Plate2_Output
    Create a CellProfiler Analyst properties file?:No
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    Name the SQLite database file:timelapse_2ch_image_analysis.sqlite
    Calculate the per-image mean values of object measurements?:No
    Calculate the per-image median values of object measurements?:No
    Calculate the per-image standard deviation values of object measurements?:No
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    Export measurements for all objects to the database?:All
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    Maximum # of characters in a column name:64
    Create one table per object, a single object table or a single object view?:One table per object type
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    Write image thumbnails directly to the database?:No
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    Experiment name:2ch_whole_image_timelapse
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    Export object relationships?:No
    Overwrite without warning?:Never
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    Create a CellProfiler Analyst workspace file?:No
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