CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:426
GitHash:
ModuleCount:19
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['Module notes are provided by Jenna Tomkinson.', '', 'Images module is left blank since we are giving the path to the images in the CLI command']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
    Filter images?:Images only
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
Metadata:[module_num:2|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notes:['Metadata is extracted from the file names using regular expressions. Metadata includes well, FOV, time, z-slice, and channel.']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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:2
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Well>[A-Z]-[0-9]{2})_F(?P<FOV>[0-9]{4})_T(?P<Time>[0-9]{4})_Z(?P<Z_slice>[0-9]{4})_C(?P<Channel>[0-9]{2})
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    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Well>[A-Z]-[0-9]{2})_F(?P<FOV>[0-9]{4})_T(?P<Time>[0-9]{4})_Z(?P<Z_slice>[0-9]{4})_(?P<Channel>[a-z]{4})
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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notes:['This pipeline assigns names to 4 channels specifically:', '', '01 = DNA/Hoechst staining', '02 = 488_1 Chromalive staining', '03 = 488_2 Chromalive staining', '04 = 561 Chromalive staining']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:5
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does Channel "01")
    Name to assign these images:DNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channel "02")
    Name to assign these images:CL_488-1
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channel "03")
    Name to assign these images:CL_488_2
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channel "04")
    Name to assign these images:CL_561
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does endwith ".png")
    Name to assign these images:mask
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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notes:['Given we are using timelapse data, we group by Well and FOV.']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
    Do you want to group your images?:No
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
ConvertImageToObjects:[module_num:5|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notes:['This module will load in the SAM2 Masks of nuclei to be used for feature extraction.']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
    Select the input image:mask
    Name the output object:Nuclei
    Convert to boolean image:Yes
    Preserve original labels:No
    Background label:0
    Connectivity:0

ImageMath:[module_num:6|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notes:['This module was suggested by Saguaro Bio and approved by Jenna Tomkinson and added by Mike Lippincott. ', '', 'We want a more robust segmentation of the cytoplasm. To do so, we utilize the ImageMath module to add all the cytoplasmic channel pixel values together to merge into one channel for segmenting whole cells. This ensures the best segmentation across cell states where the zwitterionic dyes are drastically changing.']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
    Operation:Add
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:all_488_561
    Image or measurement?:Image
    Select the first image:CL_488-1
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:CL_488_2
    Multiply the second image by:1.0
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    Image or measurement?:Image
    Select the third image:CL_561
    Multiply the third image by:1.0
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
RunCellpose:[module_num:7|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notes:['This module runs CellPose to segment the Nuclei by using the DAPI channel. This is a GPU enabled module.']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
    Select the input image:all_488_561
    Rescale images before running Cellpose:Yes
    Run CellPose in docker or local python environment:Python
    Select Cellpose docker image:cellprofiler/runcellpose_with_pretrained:0.1
    Expected object diameter:40
    Detection mode:cyto2
    Name the output object:Cells
    Use GPU:Yes
    Use averaging:No
    Supply nuclei image as well?:Yes
    Select the nuclei image:DNA
    Save probability image?:No
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    Location of the pre-trained model file:Elsewhere...|
    Pre-trained model file name:cyto_0
    Flow threshold:0.4
    Cell probability threshold:0.0
    GPU memory share for each worker:0.1
    Stitch Threshold:0.0
    Use 3D:No
    Minimum size:10
    Use Omnipose for mask reconstruction:Yes
    Invert images:No
    Remove objects that are touching the edge?:Yes
    Rescale probability map?:No

IdentifyTertiaryObjects:[module_num:8|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notes:['Identify cytoplasm compartment by subtracting nuclei masks from cells masks.']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
    Select the larger identified objects:Cells
    Select the smaller identified objects:Nuclei
    Name the tertiary objects to be identified:Cytoplasm
    Shrink smaller object prior to subtraction?:Yes

MeasureColocalization:[module_num:9|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notes:['Measure correlation for whole image and objects.']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
    Select images to measure:CL_488-1, CL_488_2, CL_561, DNA
    Set threshold as percentage of maximum intensity for the images:15.0
    Select where to measure correlation:Both
    Select objects to measure:Cells, Cytoplasm, Nuclei
    Run all metrics?:Yes
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    Method for Costes thresholding:Faster

MeasureGranularity:[module_num:10|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notes:['Measures granularity within images and objects (when parameter is turned on).']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
    Select images to measure:CL_488-1, CL_488_2, CL_561, DNA
    Measure within objects?:Yes
    Select objects to measure:Cells, Cytoplasm, Nuclei
    Subsampling factor for granularity measurements:0.25
    Subsampling factor for background reduction:0.25
    Radius of structuring element:10
    Range of the granular spectrum:16

MeasureObjectIntensity:[module_num:11|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notes:['Measures intensity within objects.']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
    Select images to measure:CL_488-1, CL_488_2, CL_561, DNA
    Select objects to measure:Cells, Cytoplasm, Nuclei

MeasureImageIntensity:[module_num:12|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notes:['Measures whole image intensity not aggregated within objects.']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
    Select images to measure:CL_488-1, CL_488_2, CL_561, DNA
    Measure the intensity only from areas enclosed by objects?:No
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    Calculate custom percentiles:No
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
MeasureObjectNeighbors:[module_num:13|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notes:['Measure cell neighbors that are adjacent to each other.']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
    Select objects to measure:Cells
    Select neighboring objects to measure:Cells
    Method to determine neighbors:Adjacent
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    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:14|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notes:['Measure Nuclei neighbors that are adjacent to each other.']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
    Select objects to measure:Nuclei
    Select neighboring objects to measure:Nuclei
    Method to determine neighbors:Adjacent
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    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectIntensityDistribution:[module_num:15|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notes:['Measure object intensity distributions witin objects using center x,y coords for each single object.', '', "We calculate Zernikes for magnitudes and phases as we are interested in seeing phase even if it doesn't help with classifying phenotypes."]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
    Select images to measure:CL_488-1, CL_488_2, CL_561, DNA
    Hidden:3
    Hidden:1
    Hidden:0
    Calculate intensity Zernikes?:Magnitudes and phase
    Maximum zernike moment:9
    Select objects to measure:Nuclei
    Object to use as center?:These objects
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    Select objects to measure:Cytoplasm
    Object to use as center?:These objects
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    Select objects to measure:Cells
    Object to use as center?:These objects
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    Scale the bins?:Yes
    Number of bins:4
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
MeasureObjectSizeShape:[module_num:16|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notes:['Measure object size and shape metrics (not related to stain).']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
    Select object sets to measure:Cells, Cytoplasm, Nuclei
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

MeasureTexture:[module_num:17|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notes:['Measure texture within objects and the whole images.']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
    Select images to measure:CL_488-1, CL_488_2, CL_561, DNA
    Select objects to measure:Cells, Cytoplasm, Nuclei
    Enter how many gray levels to measure the texture at:256
    Hidden:1
    Measure whole images or objects?:Both
    Texture scale to measure:3

MeasureImageAreaOccupied:[module_num:18|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notes:['Measure area occupied by all compartments within images.']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
    Measure the area occupied by:Objects
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    Select object sets to measure:Cells, Cytoplasm, Nuclei

ExportToDatabase:[module_num:19|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notes:['Output the morphology features into an SQLite database.']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
    Database type:SQLite
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    Add a prefix to table names?:No
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    Output file location:Default Output Folder|NF1_SchwannCell_data/CellProfiler_pipelines/Analysis_Output/Plate2_Output
    Create a CellProfiler Analyst properties file?:No
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    Name the SQLite database file:timelapse_4ch_analysis.sqlite
    Calculate the per-image mean values of object measurements?:No
    Calculate the per-image median values of object measurements?:No
    Calculate the per-image standard deviation values of object measurements?:No
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    Export measurements for all objects to the database?:All
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    Maximum # of characters in a column name:64
    Create one table per object, a single object table or a single object view?:One table per object type
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    Write image thumbnails directly to the database?:No
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    Experiment name:4ch_timelapse
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    Export object relationships?:No
    Overwrite without warning?:Never
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    Create a CellProfiler Analyst workspace file?:No
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